# Generated by Configurator on Thu Mar 01 11:32:19 PST 2007

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,DigitalCamera,PVCAM,Micromax
Device,Excitation,SutterLambda,Wheel-A
Device,Emission,SutterLambda,Wheel-B
Device,WhiteLight,SutterLambda,Shutter-B
Device,Fluorescence,SutterLambda,Shutter-A
Device,Objective,DemoCamera,DObjective


# Pre-init settings for devices
Property,Excitation,Port,COM1
Property,Emission,Port,COM1
Property,WhiteLight,Port,COM1
Property,WhiteLight,Mode,Fast
Property,Fluorescence,Port,COM1
Property,Fluorescence,Mode,Fast

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.00
Property,COM1,BaudRate,9600
Property,COM1,StopBits,1

# Initialize
Property,Core,Initialize,1

# Roles
Property,Core,Camera,DigitalCamera
Property,Core,AutoShutter,0

# Labels
# Excitation
Label,Excitation,5,UV2
Label,Excitation,4,UV1
Label,Excitation,3,Green
Label,Excitation,2,Red
Label,Excitation,1,FarRed

# Emission
Label,Emission,9,Green
Label,Emission,8,Red
Label,Emission,7,FarRed
Label,Emission,6,Closed
Label,Emission,5,Open
Label,Emission,4,Closed1
Label,Emission,3,Closed2
Label,Emission,2,Closed3
Label,Emission,1,Open1
Label,Emission,0,UV

# Objective
Label,Objective,4,Nikon 40X Plan Apo
Label,Objective,3,Nikon 20X Plan Fluor DIC
Label,Objective,2,Nikon 20X Plan Fluor 
Label,Objective,1,Nikon 10X Plan Fluor

# Configuration presets
# Group: Channel
# Preset: FITC
ConfigGroup,Channel,FITC,Emission,Label,Green
ConfigGroup,Channel,FITC,Excitation,Label,Green
ConfigGroup,Channel,FITC,WhiteLight,State,0
ConfigGroup,Channel,FITC,Fluorescence,State,1

# Preset: Cy3
ConfigGroup,Channel,Cy3,Emission,Label,Red
ConfigGroup,Channel,Cy3,Excitation,Label,Red
ConfigGroup,Channel,Cy3,WhiteLight,State,0
ConfigGroup,Channel,Cy3,Fluorescence,State,1

# Preset: DAPI
ConfigGroup,Channel,DAPI,Emission,Label,UV
ConfigGroup,Channel,DAPI,Excitation,Label,UV1
ConfigGroup,Channel,DAPI,WhiteLight,State,0
ConfigGroup,Channel,DAPI,Fluorescence,State,1

# Preset: Cy5
ConfigGroup,Channel,Cy5,Emission,Label,FarRed
ConfigGroup,Channel,Cy5,Excitation,Label,FarRed
ConfigGroup,Channel,Cy5,WhiteLight,State,0
ConfigGroup,Channel,Cy5,Fluorescence,State,1

# Preset: White
ConfigGroup,Channel,White,WhiteLight,State,1
ConfigGroup,Channel,White,Fluorescence,State,0
ConfigGroup,Channel,White,Emission,Label,Open


