# Generated by Configurator on Thu Oct 18 15:39:20 PDT 2007

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,ASIFWController,ASIFW1000,ASIFWController
Device,EmissionWheel,ASIFW1000,ASIFilterWheel
Device,XY-Stage,ASIStage,XYStage
Device,AOTF-Channel,DTOpenLayer,DTOL-Switch
Device,AOTF-Shutter,DTOpenLayer,DTOL-Shutter
Device,AOTF-DAC0,DTOpenLayer,DTOL-DAC-0
Device,DAC1,DTOpenLayer,DTOL-DAC-1
Device,TransShutter,ASIFW1000,ASIShutter
Device,TE2000-Hub,NikonTE2000,TE2000
Device,Z-Stage,NikonTE2000,Focus
Device,TE2000-Dichroics,NikonTE2000,FilterBlock
Device,TE2000-LightPath,NikonTE2000,OpticalPath
Device,Fl. Shutter,Nikon,IntensiLightShutter
Device,PFS,NikonTE2000,PerfectFocus
Device,Camera,Andor,Ixon
Device,Objectives,NikonTE2000,Nosepiece
Device,TubeLens,DemoCamera,DWheel

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.00
Property,COM3,BaudRate,9600
Property,COM3,StopBits,1
Property,COM3,DelayBetweenCharsMs,0
Property,COM4,AnswerTimeout,500.00
Property,COM4,BaudRate,9600
Property,COM4,StopBits,1
Property,COM4,DelayBetweenCharsMs,3
Property,COM5,AnswerTimeout,7000.00
Property,COM5,BaudRate,9600
Property,COM5,StopBits,1
Property,COM5,DelayBetweenCharsMs,0
Property,COM6,AnswerTimeout,500.00
Property,COM6,BaudRate,9600
Property,COM6,StopBits,1
Property,COM6,DelayBetweenCharsMs,10.00
Property,ASIFWController,Port,COM4
Property,EmissionWheel,ASIFilterWheelNumber,0
Property,XY-Stage,Port,COM3
Property,TransShutter,ASIShutterNumber,0
Property,TransShutter,ASIShutterType,Normally Closed
Property,TE2000-Hub,Port,COM5
Property,Fl. Shutter,Port,COM6
Property,Camera,DriverDir,C:\Program Files\Micro-Manager1.1

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays
Delay,AOTF-Shutter,1.0
Delay,TransShutter,25.0
Delay,Fl. Shutter,1000.0

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,AOTF-Shutter
Property,Core,Focus,Z-Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices
ImageSynchro,EmissionWheel

# Labels
# EmissionWheel
Label,EmissionWheel,7,Closed-7
Label,EmissionWheel,6,535/50
Label,EmissionWheel,5,535/30SP
Label,EmissionWheel,4,Open-4
Label,EmissionWheel,3,Closed-3
Label,EmissionWheel,2,685/70
Label,EmissionWheel,1,595/50
Label,EmissionWheel,0,525/50
# AOTF-Channel
Label,AOTF-Channel,16, 638 nm
Label,AOTF-Channel,3, 491 + 561 nm
Label,AOTF-Channel,2, 561 nm
Label,AOTF-Channel,1, 491 nm
# TE2000-Dichroics
Label,TE2000-Dichroics,4,561-TIRF
Label,TE2000-Dichroics,3,Cy5
Label,TE2000-Dichroics,2,Texas-Red
Label,TE2000-Dichroics,1,GFP
Label,TE2000-Dichroics,0,DAPI
# Objectives
Label,Objectives,5,100xTIRF
Label,Objectives,4,60xTIRF
Label,Objectives,3,40x
Label,Objectives,2,10x
Label,Objectives,1,20x

# TubeLens
Label,TubeLens,1,1.5x
Label,TubeLens,0,1.0x

# Configuration presets
# Group: Channel
# Preset: Texas-Red
ConfigGroup,Channel,Texas-Red,AOTF-Channel,Label, 491 nm
ConfigGroup,Channel,Texas-Red,AOTF-DAC0,Volts,5.00
ConfigGroup,Channel,Texas-Red,EmissionWheel,Label,Open-4
ConfigGroup,Channel,Texas-Red,TE2000-Dichroics,Label,Texas-Red
ConfigGroup,Channel,Texas-Red,Core,Shutter,Fl. Shutter

# Preset: Cy5
ConfigGroup,Channel,Cy5,AOTF-Channel,Label, 638 nm
ConfigGroup,Channel,Cy5,AOTF-DAC0,Volts,0.00
ConfigGroup,Channel,Cy5,EmissionWheel,Label,Open-4
ConfigGroup,Channel,Cy5,TE2000-Dichroics,Label,Cy5
ConfigGroup,Channel,Cy5,Core,Shutter,Fl. Shutter

# Preset: 491-585Qdot
ConfigGroup,Channel,491-585Qdot,AOTF-Channel,Label, 491 nm
ConfigGroup,Channel,491-585Qdot,AOTF-DAC0,Volts,5.00
ConfigGroup,Channel,491-585Qdot,EmissionWheel,Label,595/50
ConfigGroup,Channel,491-585Qdot,TE2000-Dichroics,Label,Position-6
ConfigGroup,Channel,491-585Qdot,Core,Shutter,AOTF-Shutter

# Preset: 491-TIRF-Triple
ConfigGroup,Channel,491-TIRF-Triple,AOTF-Channel,Label, 491 nm
ConfigGroup,Channel,491-TIRF-Triple,AOTF-DAC0,Volts,5.00
ConfigGroup,Channel,491-TIRF-Triple,EmissionWheel,Label,525/50
ConfigGroup,Channel,491-TIRF-Triple,TE2000-Dichroics,Label,Position-6
ConfigGroup,Channel,491-TIRF-Triple,Core,Shutter,AOTF-Shutter

# Preset: DAPI
ConfigGroup,Channel,DAPI,AOTF-Channel,Label, 491 nm
ConfigGroup,Channel,DAPI,AOTF-DAC0,Volts,0.00
ConfigGroup,Channel,DAPI,EmissionWheel,Label,Open-4
ConfigGroup,Channel,DAPI,TE2000-Dichroics,Label,DAPI
ConfigGroup,Channel,DAPI,Core,Shutter,Fl. Shutter

# Preset: 491-TIRF-Single
ConfigGroup,Channel,491-TIRF-Single,AOTF-Channel,Label, 491 nm
ConfigGroup,Channel,491-TIRF-Single,AOTF-DAC0,Volts,5.00
ConfigGroup,Channel,491-TIRF-Single,EmissionWheel,Label,525/50
ConfigGroup,Channel,491-TIRF-Single,TE2000-Dichroics,Label,561-TIRF
ConfigGroup,Channel,491-TIRF-Single,Core,Shutter,AOTF-Shutter

# Preset: GFP
ConfigGroup,Channel,GFP,AOTF-Channel,Label, 491 nm
ConfigGroup,Channel,GFP,AOTF-DAC0,Volts,0.00
ConfigGroup,Channel,GFP,EmissionWheel,Label,Open-4
ConfigGroup,Channel,GFP,TE2000-Dichroics,Label,GFP
ConfigGroup,Channel,GFP,Core,Shutter,Fl. Shutter

# Preset: 561-TIRF-Triple
ConfigGroup,Channel,561-TIRF-Triple,AOTF-Channel,Label, 561 nm
ConfigGroup,Channel,561-TIRF-Triple,AOTF-DAC0,Volts,5.00
ConfigGroup,Channel,561-TIRF-Triple,EmissionWheel,Label,595/50
ConfigGroup,Channel,561-TIRF-Triple,TE2000-Dichroics,Label,Position-6
ConfigGroup,Channel,561-TIRF-Triple,Core,Shutter,AOTF-Shutter

# Preset: 491-655Qdot
ConfigGroup,Channel,491-655Qdot,AOTF-Channel,Label, 491 nm
ConfigGroup,Channel,491-655Qdot,AOTF-DAC0,Volts,5.00
ConfigGroup,Channel,491-655Qdot,EmissionWheel,Label,685/70
ConfigGroup,Channel,491-655Qdot,TE2000-Dichroics,Label,Position-6
ConfigGroup,Channel,491-655Qdot,Core,Shutter,AOTF-Shutter

# Preset: Trans
ConfigGroup,Channel,Trans,AOTF-Channel,Label, 491 nm
ConfigGroup,Channel,Trans,AOTF-DAC0,Volts,0.00
ConfigGroup,Channel,Trans,EmissionWheel,Label,Open-4
ConfigGroup,Channel,Trans,TE2000-Dichroics,Label,Texas-Red
ConfigGroup,Channel,Trans,Core,Shutter,TransShutter

# Preset: 638-TIRF-Triple
ConfigGroup,Channel,638-TIRF-Triple,AOTF-Channel,Label, 638 nm
ConfigGroup,Channel,638-TIRF-Triple,AOTF-DAC0,Volts,0.00
ConfigGroup,Channel,638-TIRF-Triple,EmissionWheel,Label,685/70
ConfigGroup,Channel,638-TIRF-Triple,TE2000-Dichroics,Label,Position-6
ConfigGroup,Channel,638-TIRF-Triple,Core,Shutter,AOTF-Shutter

# Preset: 561-TIRF-Single
ConfigGroup,Channel,561-TIRF-Single,AOTF-Channel,Label, 561 nm
ConfigGroup,Channel,561-TIRF-Single,AOTF-DAC0,Volts,5.00
ConfigGroup,Channel,561-TIRF-Single,EmissionWheel,Label,Open-4
ConfigGroup,Channel,561-TIRF-Single,TE2000-Dichroics,Label,561-TIRF
ConfigGroup,Channel,561-TIRF-Single,Core,Shutter,AOTF-Shutter

# Group: TubeLens
# Preset: 1.5x
ConfigGroup,TubeLens,1.5x,TubeLens,Label,1.5x

# Preset: 1.0x
ConfigGroup,TubeLens,1.0x,TubeLens,Label,1.0x

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera,FrameTransfer,On
ConfigGroup,System,Startup,Camera,InternalShutter,Open
ConfigGroup,System,Startup,Z-Stage,FocusStepSize_(nm),50
ConfigGroup,System,Startup,Camera,Output_Amplifier,Conventional CCD register
#ConfigGroup,System,Startup,Camera,Output_Amplifier,100
ConfigGroup,System,Startup,TubeLens,Label,1.5x

# Preset: Shutdown
ConfigGroup,System,Shutdown,Camera,FrameTransfer,Off
ConfigGroup,System,Shutdown,Camera,InternalShutter,Closed

# Group: LightPath
# Preset: Camera
ConfigGroup,LightPath,Camera,TE2000-LightPath,Label,Left(100)

# Preset: EyePiece
ConfigGroup,LightPath,EyePiece,TE2000-LightPath,Label,Monitor(100)


# Group: EM-Gain
# Preset:  300
ConfigGroup,EM-Gain,300,Camera,Gain,300

# Preset:   10
ConfigGroup,EM-Gain,10,Camera,Gain,10

# Preset: 2
ConfigGroup,EM-Gain,2,Camera,Gain,2

# Preset: 1000
ConfigGroup,EM-Gain,1000,Camera,Gain,1000

# Preset:   30
ConfigGroup,EM-Gain,30,Camera,Gain,30

# Preset:  100
ConfigGroup,EM-Gain,100,Camera,Gain,100


# PixelSize settings
# Resolution preset: Res100x1.5x
ConfigPixelSize,Res100x1.5x,Objectives,Label,100xTIRF
PixelSize_um,Res100x1.5x,0.1058
ConfigPixelSize,Res100x1.5x,TubeLens,Label,1.5x
PixelSize_um,Res100x1.5x,0.1058

# Resolution preset: Res100x1.0x
ConfigPixelSize,Res100x1.0x,Objectives,Label,100xTIRF
PixelSize_um,Res100x1.0x,0.16058
ConfigPixelSize,Res100x1.0x,TubeLens,Label,1.0x
PixelSize_um,Res100x1.0x,0.16058




