# Generated by Configurator on Thu Mar 01 11:32:19 PST 2007

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,DigitalCamera,PVCAMPI,Micromax
Device,Excitation,SutterLambda,Wheel-A
Device,Emission,SutterLambda,Wheel-B
Device,WhiteLight,SutterLambda,Shutter-B
Device,Fluorescence,SutterLambda,Shutter-A
Device,Objective,DemoCamera,DObjective
Device,Z-Stage,ASIStage,ZStage
Device,XY-Stage,ASIStage,XYStage

# Pre-init settings for devices
Property,Excitation,Port,COM1
Property,Emission,Port,COM1
Property,WhiteLight,Port,COM1
Property,Fluorescence,Port,COM1
Property,Z-Stage,Port,COM2
Property,XY-Stage,Port,COM2

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.00
Property,COM1,BaudRate,9600
Property,COM1,StopBits,1

# Pre-init settings for COM ports
Property,COM2,AnswerTimeout,500.00
Property,COM2,BaudRate,9600
Property,COM2,StopBits,1

# Camera-synchronized devices
ImageSynchro,Emission
ImageSynchro,WhiteLight
ImageSynchro,Excitation
ImageSynchro,Fluorescence

# Initialize
Property,Core,Initialize,1

# Roles
Property,Core,Camera,DigitalCamera
Property,Core,Shutter,Fluorescence

# Labels
# Excitation
Label,Excitation,6,Open
Label,Excitation,5,UV2
Label,Excitation,4,UV1
Label,Excitation,3,Green
Label,Excitation,2,Red
Label,Excitation,1,FarRed

# Emission
Label,Emission,9,Green
Label,Emission,8,Red
Label,Emission,7,FarRed
Label,Emission,6,Closed
Label,Emission,5,Open
Label,Emission,4,Closed1
Label,Emission,3,Closed2
Label,Emission,2,Closed3
Label,Emission,1,Open1
Label,Emission,0,UV

# Objective
Label,Objective,4,Nikon 40X Plan Apo
Label,Objective,3,Nikon 20X Plan Fluor DIC
Label,Objective,2,Nikon 20X Plan Fluor 
Label,Objective,1,Nikon 10X Plan Fluor

# Configuration presets
# Group: Channel
# Preset: FITC
ConfigGroup,Channel,FITC,Emission,Label,Green
ConfigGroup,Channel,FITC,Excitation,Label,Green
ConfigGroup,Channel,FITC,WhiteLight,State,0
ConfigGroup,Channel,FITC,Fluorescence,State,0

# Preset: FITC-eye
ConfigGroup,Channel,FITC-eye,Emission,Label,Green
ConfigGroup,Channel,FITC-eye,Excitation,Label,Green
ConfigGroup,Channel,FITC-eye,WhiteLight,State,0
ConfigGroup,Channel,FITC-eye,Fluorescence,State,1

# Preset: Cy3
ConfigGroup,Channel,Cy3,Emission,Label,Red
ConfigGroup,Channel,Cy3,Excitation,Label,Red
ConfigGroup,Channel,Cy3,WhiteLight,State,0
ConfigGroup,Channel,Cy3,Fluorescence,State,0

# Preset: Cy3-eye
ConfigGroup,Channel,Cy3-eye,Emission,Label,Red
ConfigGroup,Channel,Cy3-eye,Excitation,Label,Red
ConfigGroup,Channel,Cy3-eye,WhiteLight,State,0
ConfigGroup,Channel,Cy3-eye,Fluorescence,State,1

# Preset: DAPI
ConfigGroup,Channel,DAPI,Emission,Label,UV
ConfigGroup,Channel,DAPI,Excitation,Label,UV1
ConfigGroup,Channel,DAPI,WhiteLight,State,0
ConfigGroup,Channel,DAPI,Fluorescence,State,0

# Preset: DAPI-eye
ConfigGroup,Channel,DAPI-eye,Emission,Label,UV
ConfigGroup,Channel,DAPI-eye,Excitation,Label,UV1
ConfigGroup,Channel,DAPI-eye,WhiteLight,State,0
ConfigGroup,Channel,DAPI-eye,Fluorescence,State,1

# Preset: Cy5
ConfigGroup,Channel,Cy5,Emission,Label,FarRed
ConfigGroup,Channel,Cy5,Excitation,Label,FarRed
ConfigGroup,Channel,Cy5,WhiteLight,State,0
ConfigGroup,Channel,Cy5,Fluorescence,State,0

# Preset: Cy5-eye
ConfigGroup,Channel,Cy5-eye,Emission,Label,FarRed
ConfigGroup,Channel,Cy5-eye,Excitation,Label,FarRed
ConfigGroup,Channel,Cy5-eye,WhiteLight,State,0
ConfigGroup,Channel,Cy5-eye,Fluorescence,State,1

# Preset: White
ConfigGroup,Channel,White,WhiteLight,State,1
ConfigGroup,Channel,White,Fluorescence,State,0
ConfigGroup,Channel,White,Emission,Label,Open

# Preset: GFP-only
ConfigGroup,Channel,GFP-only,Emission,Label,Closeed1
ConfigGroup,Channel,GFP-only,Excitation,Label,Open
ConfigGroup,Channel,GFP-only,WhiteLight,State,0
ConfigGroup,Channel,GFP-only,Fluorescence,State,0

# Preset: GFP-only-eye
ConfigGroup,Channel,GFP-only-eye,Emission,Label,Green
ConfigGroup,Channel,GFP-only-eye,Excitation,Label,Open
ConfigGroup,Channel,GFP-only-eye,WhiteLight,State,0
ConfigGroup,Channel,GFP-only-eye,Fluorescence,State,1

#Preset: Close
ConfigGroup,Channel,Close,WhiteLight,State,0
ConfigGroup,Channel,Close,Fluorescence,State,0
ConfigGroup,Channel,Close,Emission,Label,Closed
